<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="harp:DeviceEvent">
        <harp:Event xsi:type="harp:Heartbeat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Heartbeats</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchEvents1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>8</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Timestamp</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchEvents2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>8</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Timestamp</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>8</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Timestamp</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>8</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Timestamp</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTrigger">
          <rx:Count xsi:nil="true" />
          <rx:TimeSpan>PT0.4S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:DescriptiveStatistics" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Mean as MeanRawTimestamp,
DateTime(1904, 1, 1) + TimeSpan.FromSeconds(Mean) as MeanTimestamp,
Count as DeviceCount,
Maximum - Minimum as MaxDifference)</scr:Expression>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>