<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Harp.RfidReader;assembly=Harp.RfidReader"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM14</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:InboundDetectionId" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>NestNE</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM17</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:InboundDetectionId" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Corridor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM18</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:InboundDetectionId" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Water</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM15</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:InboundDetectionId" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>NestNW</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>